<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindVideoEncodingBenchmarksSchemas.Session;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AindVideoEncodingBenchmarksSchemas.Rig;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindVideoEncodingBenchmarksSchemas.TaskLogic;assembly=Extensions"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p2:DeserializeFromJson">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:AindVideoEncodingBenchmarksRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromJson">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindVideoEncodingBenchmarksTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpClockGenerator.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai">
                    <PortName>COMx</PortName>
                    <StartExperimentSubjectName>StartExperiment</StartExperimentSubjectName>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpBehavior</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpBehavior.PortName</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="PortName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="StartExperimentSubjectName" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai">
                          <PortName>COM5</PortName>
                          <StartExperimentSubjectName>StartExperiment</StartExperimentSubjectName>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpBehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="beh:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="beh:CreateEventEnablePayload">
                            <beh:EventEnable>PortDI PortDIO AnalogData Camera0 Camera1</beh:EventEnable>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpBehaviorCommands</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>ControllersInitialized</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>2</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Count" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraController0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TriggeredCameraController0</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Defer">
                          <Name>TriggeredCameras0</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>TriggeredCameraController</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>FrameRate.Value</Selector>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>FrameRate</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FrameRate</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CameraFrequencyRegister</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Address" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="harp:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="harp:FormatMessagePayload">
                                  <harp:Address xsi:nil="true" />
                                  <harp:PayloadType>U16</harp:PayloadType>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="StartCameras" />
                              </Expression>
                              <Expression xsi:type="PropertySource" TypeArguments="beh:CreateStartCamerasPayload,beh:CameraOutputs">
                                <MemberName>StartCameras</MemberName>
                                <Value>CameraOutput0</Value>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>SelectedCamera</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                                  <Value>CameraOutput0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>93</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                                  <Value>CameraOutput1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>95</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                                  <Value>None</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p4:ThrowException">
                                  <p4:Message>Must select one camera!</p4:Message>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>CameraFrequencyRegister</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorEvents</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:FilterMessageType">
                                  <harp:FilterType>Include</harp:FilterType>
                                  <harp:MessageType>Event</harp:MessageType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CameraFrequencyRegister</Name>
                              </Expression>
                              <Expression xsi:type="Subtract">
                                <Operand xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Address" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="harp:Parse">
                                <harp:Register xsi:type="harp:ParseMessagePayload">
                                  <harp:PayloadType>TimestampedU8</harp:PayloadType>
                                  <harp:IsArray>false</harp:IsArray>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseAnd">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2.Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>FrameEvent</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TriggeredCameraController</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Cameras</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="rx:CreateObservable">
                                <Name>InstantiateCamera</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="rx:AsyncSubject">
                                      <Name>ThisCamera</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="BooleanProperty">
                                        <Value>true</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>TriggeredCamerasInitialized</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>ThisCamera</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Value</Selector>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="SerialNumber" Selector="SerialNumber" />
                                        <Property Name="ExposureTime" Selector="Exposure" />
                                        <Property Name="Gain" Selector="Gain" />
                                        <Property Name="Binning" Selector="Binning" />
                                        <Property Name="ColorProcessing" Selector="ColorProcessing" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p4:AindSpinnakerCapture">
                                        <spk:Index xsi:nil="true" />
                                        <spk:ColorProcessing>Default</spk:ColorProcessing>
                                        <p4:ExposureTime>19000</p4:ExposureTime>
                                        <p4:Gain>0</p4:Gain>
                                        <p4:Binning>1</p4:Binning>
                                        <p4:Gamma xsi:nil="true" />
                                        <p4:PixelFormat>Mono8</p4:PixelFormat>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>FrameEvent</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Zip" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="harp:CreateTimestamped" />
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>ThisCamera</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="9" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source2" />
                                    <Edge From="9" To="11" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source2" />
                                    <Edge From="11" To="12" Label="Source1" />
                                    <Edge From="12" To="15" Label="Source1" />
                                    <Edge From="13" To="14" Label="Source1" />
                                    <Edge From="14" To="15" Label="Source2" />
                                    <Edge From="15" To="16" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Timer">
                                  <rx:DueTime>PT0S</rx:DueTime>
                                  <rx:Period>PT0.1S</rx:Period>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                                <rx:Name>TriggeredCamerasInitialized</rx:Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TriggeredCameraController</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Cameras</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Count</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Value" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="GreaterThanOrEqual">
                                <Operand xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Delay">
                                  <rx:DueTime>PT0.1S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>ControllersInitialized</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="5" To="8" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="13" To="17" Label="Source1" />
                              <Edge From="13" To="20" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="24" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="24" Label="Source2" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source1" />
                              <Edge From="23" To="24" Label="Source3" />
                              <Edge From="24" To="25" Label="Source1" />
                              <Edge From="25" To="26" Label="Source1" />
                              <Edge From="27" To="28" Label="Source1" />
                              <Edge From="28" To="32" Label="Source1" />
                              <Edge From="29" To="30" Label="Source1" />
                              <Edge From="30" To="31" Label="Source1" />
                              <Edge From="31" To="32" Label="Source2" />
                              <Edge From="32" To="33" Label="Source1" />
                              <Edge From="32" To="37" Label="Source2" />
                              <Edge From="33" To="34" Label="Source1" />
                              <Edge From="34" To="35" Label="Source1" />
                              <Edge From="35" To="36" Label="Source1" />
                              <Edge From="36" To="37" Label="Source1" />
                              <Edge From="37" To="38" Label="Source1" />
                              <Edge From="38" To="39" Label="Source1" />
                              <Edge From="40" To="41" Label="Source1" />
                              <Edge From="41" To="42" Label="Source1" />
                              <Edge From="42" To="43" Label="Source1" />
                              <Edge From="43" To="45" Label="Source1" />
                              <Edge From="44" To="45" Label="Source2" />
                              <Edge From="45" To="46" Label="Source1" />
                              <Edge From="46" To="47" Label="Source1" />
                              <Edge From="47" To="48" Label="Source1" />
                              <Edge From="49" To="50" Label="Source1" />
                              <Edge From="50" To="51" Label="Source1" />
                              <Edge From="51" To="56" Label="Source1" />
                              <Edge From="52" To="53" Label="Source1" />
                              <Edge From="53" To="54" Label="Source1" />
                              <Edge From="54" To="55" Label="Source1" />
                              <Edge From="55" To="56" Label="Source2" />
                              <Edge From="56" To="57" Label="Source1" />
                              <Edge From="57" To="58" Label="Source1" />
                              <Edge From="58" To="59" Label="Source1" />
                              <Edge From="59" To="60" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:GroupBy">
                          <rx:KeySelector>Item2</rx:KeySelector>
                          <rx:ElementSelector>Item1</rx:ElementSelector>
                        </Expression>
                        <Expression xsi:type="rx:ReplaySubject">
                          <Name>TriggeredCamerasStream0</Name>
                          <rx:BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TriggeredCameraController0</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraController1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TriggeredCameraController1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Defer">
                          <Name>TriggeredCameras1</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>TriggeredCameraController</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>FrameRate.Value</Selector>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>FrameRate</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FrameRate</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CameraFrequencyRegister</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Address" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="harp:Format">
                                <harp:MessageType>Write</harp:MessageType>
                                <harp:Register xsi:type="harp:FormatMessagePayload">
                                  <harp:Address xsi:nil="true" />
                                  <harp:PayloadType>U16</harp:PayloadType>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="StartCameras" />
                              </Expression>
                              <Expression xsi:type="PropertySource" TypeArguments="beh:CreateStartCamerasPayload,beh:CameraOutputs">
                                <MemberName>StartCameras</MemberName>
                                <Value>CameraOutput1</Value>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>SelectedCamera</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                                  <Value>CameraOutput0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>93</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                                  <Value>CameraOutput1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>95</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                                  <Value>None</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p4:ThrowException">
                                  <p4:Message>Must select one camera!</p4:Message>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>CameraFrequencyRegister</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorEvents</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:FilterMessageType">
                                  <harp:FilterType>Include</harp:FilterType>
                                  <harp:MessageType>Event</harp:MessageType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CameraFrequencyRegister</Name>
                              </Expression>
                              <Expression xsi:type="Subtract">
                                <Operand xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Address" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="harp:Parse">
                                <harp:Register xsi:type="harp:ParseMessagePayload">
                                  <harp:PayloadType>TimestampedU8</harp:PayloadType>
                                  <harp:IsArray>false</harp:IsArray>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseAnd">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2.Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>FrameEvent</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TriggeredCameraController</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Cameras</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="rx:CreateObservable">
                                <Name>InstantiateCamera</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="rx:AsyncSubject">
                                      <Name>ThisCamera</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="BooleanProperty">
                                        <Value>true</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>TriggeredCamerasInitialized</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>ThisCamera</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Value</Selector>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="SerialNumber" Selector="SerialNumber" />
                                        <Property Name="ExposureTime" Selector="Exposure" />
                                        <Property Name="Gain" Selector="Gain" />
                                        <Property Name="Binning" Selector="Binning" />
                                        <Property Name="ColorProcessing" Selector="ColorProcessing" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p4:AindSpinnakerCapture">
                                        <spk:Index xsi:nil="true" />
                                        <spk:ColorProcessing>Default</spk:ColorProcessing>
                                        <p4:ExposureTime>19000</p4:ExposureTime>
                                        <p4:Gain>0</p4:Gain>
                                        <p4:Binning>1</p4:Binning>
                                        <p4:Gamma xsi:nil="true" />
                                        <p4:PixelFormat>Mono8</p4:PixelFormat>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>FrameEvent</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Zip" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="harp:CreateTimestamped" />
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>ThisCamera</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="9" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source2" />
                                    <Edge From="9" To="11" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source2" />
                                    <Edge From="11" To="12" Label="Source1" />
                                    <Edge From="12" To="15" Label="Source1" />
                                    <Edge From="13" To="14" Label="Source1" />
                                    <Edge From="14" To="15" Label="Source2" />
                                    <Edge From="15" To="16" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Timer">
                                  <rx:DueTime>PT0S</rx:DueTime>
                                  <rx:Period>PT0.1S</rx:Period>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                                <rx:Name>TriggeredCamerasInitialized</rx:Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TriggeredCameraController</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Cameras</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Count</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Value" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="GreaterThanOrEqual">
                                <Operand xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Delay">
                                  <rx:DueTime>PT0.1S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>ControllersInitialized</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="5" To="8" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="13" To="17" Label="Source1" />
                              <Edge From="13" To="20" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="24" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="24" Label="Source2" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source1" />
                              <Edge From="23" To="24" Label="Source3" />
                              <Edge From="24" To="25" Label="Source1" />
                              <Edge From="25" To="26" Label="Source1" />
                              <Edge From="27" To="28" Label="Source1" />
                              <Edge From="28" To="32" Label="Source1" />
                              <Edge From="29" To="30" Label="Source1" />
                              <Edge From="30" To="31" Label="Source1" />
                              <Edge From="31" To="32" Label="Source2" />
                              <Edge From="32" To="33" Label="Source1" />
                              <Edge From="32" To="37" Label="Source2" />
                              <Edge From="33" To="34" Label="Source1" />
                              <Edge From="34" To="35" Label="Source1" />
                              <Edge From="35" To="36" Label="Source1" />
                              <Edge From="36" To="37" Label="Source1" />
                              <Edge From="37" To="38" Label="Source1" />
                              <Edge From="38" To="39" Label="Source1" />
                              <Edge From="40" To="41" Label="Source1" />
                              <Edge From="41" To="42" Label="Source1" />
                              <Edge From="42" To="43" Label="Source1" />
                              <Edge From="43" To="45" Label="Source1" />
                              <Edge From="44" To="45" Label="Source2" />
                              <Edge From="45" To="46" Label="Source1" />
                              <Edge From="46" To="47" Label="Source1" />
                              <Edge From="47" To="48" Label="Source1" />
                              <Edge From="49" To="50" Label="Source1" />
                              <Edge From="50" To="51" Label="Source1" />
                              <Edge From="51" To="56" Label="Source1" />
                              <Edge From="52" To="53" Label="Source1" />
                              <Edge From="53" To="54" Label="Source1" />
                              <Edge From="54" To="55" Label="Source1" />
                              <Edge From="55" To="56" Label="Source2" />
                              <Edge From="56" To="57" Label="Source1" />
                              <Edge From="57" To="58" Label="Source1" />
                              <Edge From="58" To="59" Label="Source1" />
                              <Edge From="59" To="60" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:GroupBy">
                          <rx:KeySelector>Item2</rx:KeySelector>
                          <rx:ElementSelector>Item1</rx:ElementSelector>
                        </Expression>
                        <Expression xsi:type="rx:ReplaySubject">
                          <Name>TriggeredCamerasStream1</Name>
                          <rx:BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TriggeredCameraController1</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartExperiment</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>